 <PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0" >
    <DeviceSet
      Name="PlusServer: Specim Camera"
      Description="Broadcasting acquired video through PlusServer from a Specim Camera"
    />
    <Device 
      Id="VideoDevice"
      Type="SpecimCam" 
      Grabber.Channel="70:f8:e7:b0:06:64"
      Camera.CalibrationPack=""
      Camera.CalibrationPack.Stopacquisition="true"
      AcquisitionWindow.Left="0"
      AcquisitionWindow.Left.Stopacquisition="true"
      AcquisitionWindow.Top="0"
      AcquisitionWindow.Top.Stopacquisition="true"
      AcquisitionWindow.Width="640"
      AcquisitionWindow.Width.Stopacquisition="true"
      AcquisitionWindow.Height="224"
      AcquisitionWindow.Height.Stopacquisition="true"
      Acquisition.RingBuffer.Size="500"
      Camera.MROI.Enable="false"
      Camera.MROI.Enable.Stopacquisition="true"
	  Camera.MROI.Mode="Band"
      Camera.MROI.Clear=""
      Camera.MROI.Clear.Stopacquisition="true"
      Camera.MROI.MultipointString=""
      Camera.MROI.MultipointString.Stopacquisition="true"
      Camera.MROI.MultibandString="None"
      Camera.MROI.MultibandString.Stopacquisition="true"
	  Camera.Gain.Digital="1x"
      Camera.ExposureTime="100"
      Camera.ExposureTime.Auto="false"
      Camera.FrameRate="30"
      Camera.FrameRate.Stopacquisition="true"
      Camera.Trigger.Mode="Internal"
      Camera.Trigger.Mode.Stopacquisition="true"
      Camera.Trigger.InternalExposure="true"
      Camera.Trigger.Interleave="true"
      Camera.Binning.Spectral="1"
      Camera.Binning.Spectral.Stopacquisition="true"
      Camera.Binning.Spatial="1"
      Camera.Binning.Spatial.Stopacquisition="true"
      Camera.Binning.Average="true"
      Camera.Image.Transformation="No transformation"
      Camera.Image.Transformation.Stopacquisition="true"
	  Camera.Image.AberrationCorrection.Enabled="true"
	  Camera.Image.AberrationCorrection.Keystone.FilePath=""
	  Camera.Image.AberrationCorrection.Smile.FilePath=""
	  Pleora.PixelFormat="Mono12Packed"
	  Pleora.TapConfiguration="Two"
      Pleora.Stream.PacketSize="1060"
      Grabber.UseDVAL="true"
	  Camera.Trigger.Source="Line0"
      Camera.Shutter.VoltagePump.TimeoutInHours="0">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="UF"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video" />
      </OutputChannels>
    </Device>
  </DataCollection>

  <CoordinateDefinitions>
    <Transform From="Image" To="Reference"
      Matrix="
        0.5 0 0 0
        0 -0.5 0 0
        0 0 0.5 0
        0 0 0 1" />
  </CoordinateDefinitions>

  <PlusOpenIGTLinkServer
    MaxNumberOfIgtlMessagesToSend="1"
    MaxTimeSpentWithProcessingMs="33"
    ListeningPort="18944"
    SendValidTransformsOnly="true"
    OutputChannelId="VideoStream" >
    <DefaultClientInfo>
      <MessageTypes>
        <Message Type="IMAGE" />
      </MessageTypes>
      <ImageNames>
        <Image Name="Image" EmbeddedTransformToFrame="Reference" />
      </ImageNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
